### Photon

/gate/physics/addProcess PhotoElectric gamma
/gate/physics/processes/PhotoElectric/setModel StandardModel

/gate/physics/addProcess Compton
/gate/physics/processes/Compton/setModel StandardModel

/gate/physics/addProcess GammaConversion
/gate/physics/processes/GammaConversion/setModel StandardModel

### Electron

/gate/physics/addProcess MultipleScattering e+
/gate/physics/addProcess MultipleScattering e-

/gate/physics/addProcess ElectronIonisation
/gate/physics/processes/ElectronIonisation/setModel StandardModel e-
#/gate/physics/processes/ElectronIonisation/setModel StandardModel e+

/gate/physics/addProcess Bremsstrahlung
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e-
#/gate/physics/processes/Bremsstrahlung/setModel StandardModel e+

### Radioactive decay

/gate/physics/addProcess RadioactiveDecay

### Possibly unneeded?

#/gate/physics/addProcess RayleighScattering
#/gate/physics/processes/RayleighScattering/setModel PenelopeModel

#/gate/physics/addProcess PositronAnnihilation

/gate/physics/processList Enabled
/gate/physics/processList Initialized
