

#-------------------oooooOOOOO00000OOOOOooooo---------------------#
#
#            D E F I N E   G A M M A K N I F E   A N D
#
#       T O T A L L Y   C O M P L E T E   S I M U L A T I O N
#
#      F O R     D O S I M E T R I C    A P P L I CA T I O N S
#
#-------------------oooooOOOOO00000OOOOOooooo---------------------#


#=====================================================
# VISUALISATION
#=====================================================

#/vis/disable

/vis/open                           OGLSX
/vis/viewer/set/viewpointThetaPhi   60 60
/vis/viewer/zoom                    6.0
/vis/drawVolume
/tracking/storeTrajectory           1
/vis/scene/add/trajectories
/vis/scene/endOfEventAction         accumulate

#custom
#/vis/scene/create
#/vis/open VRML2FILE
#/tracking/storeTrajectory 1
#/vis/scene/add/trajectories
#/vis/scene/endOfEventAction accumulate
#/custom

/control/execute                    Verbose.mac


#=====================================================
# GEOMETRY
#=====================================================



/gate/geometry/setMaterialDatabase    /home/g4vm/Programs/gate/gate_v7.0/GateMaterials.db

#
#     W O R L D
#
/gate/world/geometry/setXLength       200. cm
/gate/world/geometry/setYLength       200. cm
/gate/world/geometry/setZLength       200. cm
#/gate/world/geometry/setXLength       400. mm
#/gate/world/geometry/setYLength       400. mm
#/gate/world/geometry/setZLength       400. mm


#-------------------oooooOOOOO00000OOOOOooooo---------------------#
#                                                                 #
#     D E F I N I T I O N   A N D   D E S C R I P T I O N         #
#           O F   G A M M A K N I F E   D E V I C E               #
#                                                                 #
#-------------------oooooOOOOO00000OOOOOooooo---------------------#

# ----------------------------
# COBALT SOURCE AND COLLIMATOR
# ----------------------------

# CONTAINER
/gate/world/daughters/name                    ionSource
/gate/world/daughters/insert                  cylinder
/gate/ionSource/placement/setTranslation      0.0 0.0 0.0 mm
/gate/ionSource/geometry/setRmax              53.8176 mm
/gate/ionSource/geometry/setRmin              0.0 mm
/gate/ionSource/geometry/setHeight            243.5126 mm
/gate/ionSource/setMaterial                   Air
/gate/ionSource/vis/forceWireframe
/gate/ionSource/vis/setColor                  yellow
/gate/ionSource/placement/setRotationAxis     1 0 0
/gate/ionSource/placement/setRotationAngle    90 deg

### TUBE DEFINITIONS

# OUTER TUBE
/gate/ionSource/daughters/name                largestTube
/gate/ionSource/daughters/insert              cylinder
/gate/largestTube/placement/setTranslation    0.0 0.0 -96.75 mm
/gate/largestTube/geometry/setRmax            13.81755 mm
/gate/largestTube/geometry/setRmin            6.0706 mm
/gate/largestTube/geometry/setHeight          50.0126 mm
/gate/largestTube/setMaterial                 SS304
/gate/largestTube/vis/setColor                red

# MIDDLE TUBE
/gate/largestTube/daughters/name              middleTube
/gate/largestTube/daughters/insert            cylinder
/gate/middleTube/placement/setTranslation     0.0 0.0 5.4288 mm
/gate/middleTube/geometry/setRmax             5.8039 mm
/gate/middleTube/geometry/setRmin             3.556 mm
/gate/middleTube/geometry/setHeight           36.4236 mm
/gate/middleTube/setMaterial                  SS304
/gate/middleTube/vis/setColor                 blue

# INNER TUBE
/gate/middleTube/daughters/name               innerTube
/gate/middleTube/daughters/insert             cylinder
#(36.4236-32.9438)/2 - .4064
/gate/innerTube/placement/setTranslation      0.0 0.0 1.3335 mm
/gate/innerTube/geometry/setRmax              3.302 mm
/gate/innerTube/geometry/setRmin              1.2954 mm
/gate/innerTube/geometry/setHeight            32.9438 mm
/gate/innerTube/setMaterial                   SS304
/gate/innerTube/vis/setColor                  green

### CAP DEFINITIONS

# OUTER CONTAINER CAP
/gate/largestTube/daughters/name              largestCap
/gate/largestTube/daughters/insert            cylinder
/gate/largestCap/placement/setTranslation     0.0 0.0 24.2951 mm
/gate/largestCap/geometry/setRmax             5.8039 mm
/gate/largestCap/geometry/setRmin             4. mm
/gate/largestCap/geometry/setHeight           1.4244 mm
/gate/largestCap/setMaterial                  SS304
/gate/largestCap/vis/setColor                 white

# MIDDLE CONTAINER CAP
/gate/largestTube/daughters/name              middleCap
/gate/largestTube/daughters/insert            cylinder
/gate/middleCap/placement/setTranslation      0.0 0.0 23.3807 mm
/gate/middleCap/geometry/setRmax              3.302 mm
/gate/middleCap/geometry/setRmin              0. mm
/gate/middleCap/geometry/setHeight            0.4064 mm
/gate/middleCap/setMaterial                   SS304
/gate/middleCap/vis/setColor                  magenta

## STILL NEEDS CONE SUBTRACTED
# INNER CONTAINER CAP
/gate/innerTube/daughters/name                innerCap
/gate/innerTube/daughters/insert              cylinder
#/gate/innerCap/placement/setTranslation       0.0 0.0 23.3807 mm
/gate/innerCap/placement/setTranslation       0.0 0.0 16.1294 mm
/gate/innerCap/geometry/setRmax               1.2954 mm
/gate/innerCap/geometry/setRmin               0. mm
/gate/innerCap/geometry/setHeight             0.685 mm
/gate/innerCap/setMaterial                    SS304
/gate/innerCap/vis/setColor                   cyan

# OUTER CONTAINER BACK CAP
/gate/largestTube/daughters/name              largestBackCap
/gate/largestTube/daughters/insert            cylinder
/gate/largestBackCap/placement/setTranslation 0.0 0.0 -23.876 mm
/gate/largestBackCap/geometry/setRmax         5.8039 mm
/gate/largestBackCap/geometry/setRmin         0. mm
/gate/largestBackCap/geometry/setHeight       2.2606 mm
/gate/largestBackCap/setMaterial              SS304
/gate/largestBackCap/vis/setColor             yellow

# MIDDLE CONTAINER BACK CAP
/gate/middleTube/daughters/name               middleBackCap
/gate/middleTube/daughters/insert             cylinder
/gate/middleBackCap/placement/setTranslation  0.0 0.0 -17.1831 mm
/gate/middleBackCap/geometry/setRmax          3.302 mm
/gate/middleBackCap/geometry/setRmin          0. mm
/gate/middleBackCap/geometry/setHeight        2.0574 mm
/gate/middleBackCap/setMaterial               SS304
/gate/middleBackCap/vis/setColor              green

# INNER CONTAINER BACK CAP
/gate/innerTube/daughters/name                innerBackCap
/gate/innerTube/daughters/insert              cylinder
/gate/innerBackCap/placement/setTranslation   0.0 0.0 -15.4719 mm
/gate/innerBackCap/geometry/setRmax           1.2954 mm
/gate/innerBackCap/geometry/setRmin           0. mm
/gate/innerBackCap/geometry/setHeight         2. mm
/gate/innerBackCap/setMaterial                SS304
/gate/innerBackCap/vis/setColor               white

## !! STILL NEED COBALT FILLING & TUNGSTEN PLUG !!

### COLLIMATOR DEFINITIONS

# PRIMARY COLLIMATOR 1
/gate/ionSource/daughters/name                primaryColl
/gate/ionSource/daughters/insert              cylinder
/gate/primaryColl/placement/setTranslation    0.0 0.0 -45.9937 mm
/gate/primaryColl/geometry/setRmax            12.5 mm
/gate/primaryColl/geometry/setRmin            3.25 mm
/gate/primaryColl/geometry/setHeight          51.5 mm
/gate/primaryColl/setMaterial                 Tungsten
/gate/primaryColl/vis/setColor                red

# PRIMARY COLLIMATOR 2
/gate/ionSource/daughters/name                primaryColl2
/gate/ionSource/daughters/insert              cylinder
/gate/primaryColl2/placement/setTranslation   0.0 0.0 5.5063 mm
/gate/primaryColl2/geometry/setRmax           12.5 mm
/gate/primaryColl2/geometry/setRmin           3.25 mm
/gate/primaryColl2/geometry/setHeight         51.5 mm
/gate/primaryColl2/setMaterial                Tungsten
/gate/primaryColl2/vis/setColor               blue

# SECONDARY COLLIMATOR (4mm)
/gate/ionSource/daughters/name                coll
/gate/ionSource/daughters/insert              cylinder
/gate/coll/placement/setTranslation           0.0 0.0 77.2563 mm
/gate/coll/geometry/setRmax                   10. mm
/gate/coll/geometry/setRmin                   1.3 mm
/gate/coll/geometry/setHeight                 89. mm
/gate/coll/setMaterial                        Tungsten
/gate/coll/vis/setColor                       magenta

## !! STILL NEED 8/14/18 mm COLLIMATORS W/ BOOLEAN SOLIDS !!

### SHIELDING DEFINITIONS

# SOURCE SHIELDING
/gate/ionSource/daughters/name                sourceShield
/gate/ionSource/daughters/insert              cylinder
/gate/sourceShield/placement/setTranslation   0.0 0.0 -45.25 mm
/gate/sourceShield/geometry/setRmax           53.8176 mm
/gate/sourceShield/geometry/setRmin           13.8176 mm
/gate/sourceShield/geometry/setHeight         153.0126 mm
/gate/sourceShield/setMaterial                SS304
/gate/sourceShield/vis/setColor               cyan

# COLLIMATOR SHIELDING
/gate/ionSource/daughters/name                collShield
/gate/ionSource/daughters/insert              cylinder
/gate/collShield/placement/setTranslation     0.0 0.0 77.2563 mm
/gate/collShield/geometry/setRmax             53.8176 mm
/gate/collShield/geometry/setRmin             10. mm
/gate/collShield/geometry/setHeight           89. mm
/gate/collShield/setMaterial                  SS304
/gate/collShield/vis/setColor                 grey


# ----------------------------
# REPEAT SOURCE AND COLLIMATOR
# ----------------------------

/gate/ionSource/repeaters/insert              sphere
/gate/ionSource/sphere/setRadius              260.5 mm
/gate/ionSource/sphere/setPhiAngle            60 deg
/gate/ionSource/sphere/setRepeatNumberWithPhi 6
#/gate/ionSource/sphere/setRepeatVector        0.0 3.2 4.0 mm


# ----------------------------
# MOVEMENT OF SOURCE OVER TIME
# ----------------------------

/gate/ionSource/moves/insert                  orbiting
/gate/ionSource/orbiting/setSpeed             5 deg/s
/gate/ionSource/orbiting/setPoint1            0 0 0 cm
/gate/ionSource/orbiting/setPoint2            0 1 0 cm


#	CYLINDRICAL
/gate/world/daughters/name                    cylindricalPET
/gate/world/daughters/insert                  cylinder
/gate/cylindricalPET/placement/setTranslation 0.0 0.0 0.0 cm
/gate/cylindricalPET/geometry/setRmax         52.0 cm
/gate/cylindricalPET/geometry/setRmin         39.9 cm
/gate/cylindricalPET/geometry/setHeight       40.2 cm
/gate/cylindricalPET/setMaterial              Air
/gate/cylindricalPET/vis/forceWireframe
/gate/cylindricalPET/vis/setColor             white
#
/gate/cylindricalPET/vis/setVisible           0

#	HEAD
/gate/cylindricalPET/daughters/name           head
/gate/cylindricalPET/daughters/insert         box
/gate/head/placement/setTranslation           44.0 0.0 0.0 cm
/gate/head/geometry/setXLength                8  cm
/gate/head/geometry/setYLength                32 cm
/gate/head/geometry/setZLength                40 cm
/gate/head/setMaterial                        Air
/gate/head/vis/setVisible                     0


#	BLOCK
/gate/head/daughters/name                     block
/gate/head/daughters/insert                   box
/gate/block/placement/setTranslation          0.0 0.0 0.0 cm
/gate/block/geometry/setXLength               30 mm
/gate/block/geometry/setYLength               16 mm
/gate/block/geometry/setZLength               20 mm
/gate/block/setMaterial                       Air
/gate/block/vis/setVisible                    0
#
/gate/block/vis/setVisible                     0

#	C R Y S T A L
/gate/block/daughters/name                    crystal
/gate/block/daughters/insert                  box
/gate/crystal/placement/setTranslation        0.0 0.0 0.0 cm
/gate/crystal/geometry/setXLength             30 mm
/gate/crystal/geometry/setYLength             3.0 mm
/gate/crystal/geometry/setZLength             3.8 mm
/gate/crystal/setMaterial                     Air
/gate/crystal/vis/setVisible                  0
#
/gate/crystal/vis/setVisible                     0


#	LSO layer
/gate/crystal/daughters/name                  LSO
/gate/crystal/daughters/insert                box
/gate/LSO/placement/setTranslation            -0.75 0.0 0.0 cm
/gate/LSO/geometry/setXLength                 15 mm
/gate/LSO/geometry/setYLength                 3.0 mm
/gate/LSO/geometry/setZLength                 3.8 mm
/gate/LSO/setMaterial                         LSO
/gate/LSO/vis/setColor                        red
#
/gate/LSO/vis/setVisible                     0

#	BGO layer
/gate/crystal/daughters/name                  BGO
/gate/crystal/daughters/insert                box
/gate/BGO/placement/setTranslation            +0.75 0.0 0.0 cm
/gate/BGO/geometry/setXLength                 15 mm
/gate/BGO/geometry/setYLength                 3.0 mm
/gate/BGO/geometry/setZLength                 3.8 mm
/gate/BGO/setMaterial                         BGO
/gate/BGO/vis/setColor                        yellow
#
/gate/BGO/vis/setVisible                     0

#	R E P E A T    C R Y S T A L
/gate/crystal/repeaters/insert                cubicArray
/gate/crystal/cubicArray/setRepeatNumberX     1
/gate/crystal/cubicArray/setRepeatNumberY     5
/gate/crystal/cubicArray/setRepeatNumberZ     5
/gate/crystal/cubicArray/setRepeatVector      0.0 3.2 4.0 mm


#	R E P E A T    BLOCK
/gate/block/repeaters/insert                  cubicArray
/gate/block/cubicArray/setRepeatNumberX       1
/gate/block/cubicArray/setRepeatNumberY       20
/gate/block/cubicArray/setRepeatNumberZ       20
/gate/block/cubicArray/setRepeatVector        0.0 1.6 2.0 cm


#	R E P E A T HEAD
/gate/head/repeaters/insert                   ring
/gate/head/ring/setRepeatNumber               4


#	A T T A C H    S Y S T E M
/gate/systems/cylindricalPET/rsector/attach   head
/gate/systems/cylindricalPET/module/attach    block
/gate/systems/cylindricalPET/crystal/attach   crystal
/gate/systems/cylindricalPET/layer0/attach    LSO
/gate/systems/cylindricalPET/layer1/attach    BGO

#	A T T A C H    C R Y S T A L  SD

/gate/LSO/attachCrystalSD
/gate/BGO/attachCrystalSD

/gate/systems/cylindricalPET/describe

/gate/cylindricalPET/moves/insert             orbiting
/gate/cylindricalPET/orbiting/setSpeed        30 deg/s
/gate/cylindricalPET/orbiting/setPoint1       0 0 0 cm
/gate/cylindricalPET/orbiting/setPoint2       0 0 1 cm

#=====================================================
# VOXEL PHANTOM
#=====================================================

#/control/execute VoxelizedPhantom.mac

#=====================================================
# PHYSICS
#=====================================================

/gate/physics/addProcess PhotoElectric
/gate/physics/processes/PhotoElectric/setModel StandardModel

/gate/physics/addProcess Compton
/gate/physics/processes/Compton/setModel StandardModel

/gate/physics/addProcess RayleighScattering
/gate/physics/processes/RayleighScattering/setModel PenelopeModel

/gate/physics/addProcess ElectronIonisation
/gate/physics/processes/ElectronIonisation/setModel StandardModel e-
/gate/physics/processes/ElectronIonisation/setModel StandardModel e+

/gate/physics/addProcess Bremsstrahlung
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e-
/gate/physics/processes/Bremsstrahlung/setModel StandardModel e+

/gate/physics/addProcess PositronAnnihilation

/gate/physics/addProcess MultipleScattering e+
/gate/physics/addProcess MultipleScattering e-

/gate/physics/processList Enabled
/gate/physics/processList Initialized

#=====================================================
# CUTS
#=====================================================

/gate/physics/Gamma/SetCutInRegion      LSO 1.0 cm
/gate/physics/Electron/SetCutInRegion   LSO 1.0 cm
/gate/physics/Positron/SetCutInRegion   LSO 1.0 cm

/gate/physics/Gamma/SetCutInRegion      BGO 1.0 cm
/gate/physics/Electron/SetCutInRegion   BGO 1.0 cm
/gate/physics/Positron/SetCutInRegion   BGO 1.0 cm


#/gate/physics/Gamma/SetCutInRegion      hof_brain 0.1 mm
#/gate/physics/Electron/SetCutInRegion   hof_brain 0.1 mm
#/gate/physics/Positron/SetCutInRegion   hof_brain 0.1 mm

#/gate/physics/SetMaxStepSizeInRegion    hof_brain 0.01 mm

#=====================================================
# INITIALISATION
#=====================================================

/gate/run/initialize


#=====================================================
# Show how the geometry moves with time
#=====================================================

/control/execute                        MoveVisu.mac

#=====================================================
#   D I G I T I Z E R: DETECTOR ELECTRONIC RESPONSE
#=====================================================

/gate/digitizer/Singles/insert                        adder
/gate/digitizer/Singles/insert                        readout
/gate/digitizer/Singles/readout/setDepth              1

/gate/digitizer/Singles/insert                        blurring
/gate/digitizer/Singles/blurring/setResolution        0.26
/gate/digitizer/Singles/blurring/setEnergyOfReference 511. keV

/gate/digitizer/Singles/insert                        thresholder
/gate/digitizer/Singles/thresholder/setThreshold      350. keV
/gate/digitizer/Singles/insert                        upholder
/gate/digitizer/Singles/upholder/setUphold            650. keV



#=====================================================
#	C O I N C I D E N C E    S O R T E R
#=====================================================

/gate/digitizer/Coincidences/setWindow          10. ns

/gate/digitizer/name                            delay
/gate/digitizer/insert                          coincidenceSorter
/gate/digitizer/delay/setWindow                 10. ns
/gate/digitizer/delay/setOffset                 500. ns

#=====================================================
#  VOXELIZED SOURCE
#=====================================================

/control/execute VoxelizedSource.mac

#=====================================================
#  DATA OUTPUT
#=====================================================

/gate/output/root/enable
/gate/output/root/setFileName             YourFile
/gate/output/root/setRootHitFlag          0
/gate/output/root/setRootSinglesFlag      1
/gate/output/root/setRootCoincidencesFlag 1
/gate/output/root/setRootdelayFlag        1
/gate/output/root/setRootNtupleFlag       0



#=====================================================
#   MEASUREMENT SETTINGS
#=====================================================

/gate/application/setTimeSlice   100 ms
/gate/application/setTimeStart   0   ms
/gate/application/setTimeStop    100 ms

/gate/application/startDAQ

